PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001', 'starting_score': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = ADMT_practice
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Routines
  Routine Welcome
    TextComponent welcome
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
          Welcome to the experiment!


        (Press left button to continue)
    KeyboardComponent key_resp
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LongITI1
    TextComponent longiti1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = +
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  Routine Choice
    CodeComponent default_parameter
      Code Type = Py
      Begin Experiment:
        totalsum = int(expInfo['starting_score'])
    CodeComponent choice_txt_code
      Code Type = Py
      Begin Routine:
        Choice_txt = '          {} points\n\n{}% win      {}% lose\n\n  Accept         Decline  '.format(Value,Win,Lose)
    TextComponent choice
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Choice_txt
      units = norm
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    KeyboardComponent choice_key
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent choice_code
      Code Type = Py
      End Routine:
        theseKeys = choice_key.keys

        if theseKeys == '1':
            LBracket = ""
            RBracket = ""
            if RealValue > 0:
                Gainsign = '+'
            else:
                Gainsign = ''
            Outcome = RealValue
            RespCheck = ""
            totalsum = totalsum + Outcome
        elif theseKeys == '2':
            LBracket = "("
            RBracket = ")"
            if RealValue > 0:
                Gainsign = '+'
            else:
                Gainsign = ''
            Outcome = RealValue
            RespCheck = ""
            totalsum = totalsum
        elif theseKeys == None:
            LBracket = ""
            RBracket = ""
            Gainsign = ""
            Outcome = 0
            RespCheck = "Please respond!!!"
            totalsum = totalsum

        thisExp.addData('LBracket', LBracket)
        thisExp.addData('RBracket', RBracket)
        thisExp.addData('Gainsign', Gainsign)
        thisExp.addData('RespCheck', RespCheck)
        thisExp.addData('Outcome', Outcome)
        thisExp.addData('totalsum', totalsum)
  Routine ITI1
    TextComponent iti1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine Feedback
    CodeComponent feedback_txt_code
      Code Type = Py
      Begin Routine:
        feedback_txt = '     {}{}{}{} points\n {}\n\n total {} points'.format(LBracket,Gainsign,Outcome,RBracket,RespCheck,totalsum)
    TextComponent feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_txt
      units = norm
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    CodeComponent feedback_code
      Code Type = Py
      End Routine:
        if choice_key.keys == '1':
            if RealValue > 0:
                cond = 'A_GAIN'
            elif RealValue < 0:
                cond = 'A_LOSS'
        elif choice_key.keys == '2':
            if RealValue > 0:
                cond = 'R_GAIN'
            elif RealValue < 0:
                cond = 'R_LOSS'
        elif choice_key.keys == None:
            cond = 'Dummy'

        thisExp.addData('cond', cond)
  Routine ITI2
    TextComponent iti2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine LongITI2
    TextComponent longiti2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = +
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  Routine Instruction1
    TextComponent instruction1
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                          Welcome to the experiment!


        Today you will be playing a points-accumulation game.

        Your goal is to accumulate as many points as you can.


                         (Press right button to continue)
    KeyboardComponent key_resp_2
      allowedKeys = '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruction2
    TextComponent instruction2
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
             During each round you will see three numbers.
                                     For example:

                                        100 points

                                 93% win        7% lose

                        The top shows the points at stake.
           The bottom two represent the likelihood of winning
                                 or losing the points.

        (If there are no questions, press left button to continue)
    KeyboardComponent key_resp_3
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruction3
    TextComponent instruction3
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10 
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      text:
                  The display also shows two alternatives: accept or decline.

                                                      100 points

                                               93% win        7% lose

                                               Accept            Decline

           You need to decide whether you want to accept or decline the offer.

                If you accept you have a chance to win the points at stake.
                But there may also be a chance that you will lose the points.
        If you decline, you will not lose any points, but will not gain any either.

                (If there are no questions, press right button to continue)
    KeyboardComponent key_resp_5
      allowedKeys = '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instruction4
    TextComponent instruction4
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
        The display also shows two alternatives: accept or decline.

                                            100 points

                                    93% win        7% lose

                                    Accept            Decline

                              If you wish to accept this offer,
                                    press the left button.
                           And if you wish to decline this offer,
                                    press the right button.

        (If there are no questions, press left button to continue)
    KeyboardComponent key_resp_6
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instruction5
    TextComponent instruction5
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                    In this example slide, if you accept the offer,

                                            100 points

                                    93% win        7% lose

                                    Accept            Decline

                    There is a 93% chance of winning 100 points,
                         with a 7% chance of losing 100 points.

                                    If you decline the offer,
                           you will not gain or lose the points.

        (If there are no questions, press right button to continue)
    KeyboardComponent key_resp_7
      allowedKeys = '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ExFeedback1
    TextComponent exfeedback1
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                        After each round, the outcome will be shown.
                        You will see two more numbers. For example:

                                                +100 points

                                                 567 points

                If you accepted the offer, the points you won or lost will be
         shown as the top number. In the above example, you won 100 points.

                        The bottom number shows your running total score.
                In the above example, 100 points were added to 467 points,
                                so that your accumulated points are 567.

              If you declined, you will see the actual outcome in parenthesis,
                                        for example: "( +100 ) points"
        This indicates what the outcome would have been if you had accepted.
                   But there will be no change to the running total scores.

                          (press left button to see second exmple)
    KeyboardComponent key_resp_8
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ExDisplay2
    TextComponent exdisplay2
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                    In this second example, 21 points are at stake.

                                                 21 points

                                        33% win        67% lose

                                        Accept            Decline

            If you accept, there is a 33% chance of winning 21 points,
                           with a 67% chance of losing 21 points.

            If you decline the offer, you will not gain or lose the points.

                (If there are no questions, press right button to continue)
    KeyboardComponent key_resp_9
      allowedKeys = '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ExChoice2
    TextComponent exchoice2
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                                             21 points

                                    33% win        67% lose

                                    Accept            Decline

                                As indicated on the bottom,
         If you wish to accept, you should press the LEFT button,
        If you wish to decline, you should press the RIGHT button.

                                (press left button to continue)
    KeyboardComponent key_resp_10
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ExFeedback2
    TextComponent exfeedback2
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
            After each round, the outcome will be shown. For example:

                                                 -21 points

                                                 287 points

                                            If you accepted,
          the points you won or lost will be shown as the top number.
                            In this example, you lost 21 points.

                    If you declined, you will see "(-21) points" instead.
        Your running total scores will be shown as the bottom number.

                                (press right button to continue)
    KeyboardComponent key_resp_11
      allowedKeys = '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instruction6
    TextComponent instruction6
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                                                Remember:

                                            During each round,
                              If you accept, press the LEFT button,
                            If you decline, press the RIGHT button.

                Then the display will show the points you won or lost.
        And the running total score will be shown as the bottom number.

                (If there are no questions, press left button to continue)
    KeyboardComponent key_resp_12
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instruction7
    TextComponent instruction7
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                                          Remember:

          Your goal is to accumulate as many points as you can.

                Please respond as fast as you can for each offer.

          (If there are no questions, press left button to continue)
    KeyboardComponent key_resp_13
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine LetUsGo
    TextComponent letusgo
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                                    The practice is about to start.

                As soon as you press any key, the computer will display
                            a new screen with a cross in the center.
        Please maintain your attention on the cross whenever it appears.

                    If there are no questions, press any key to start!
    KeyboardComponent key_resp_4
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LetUsGo2
    TextComponent letusgo2
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
        In the next practice, you will only have 4 seconds for each offer.

                Therefore, you have to decide whether you want to
                  accept or decline within 4 seconds in this round.

              If there are no questions, press any button to continue
    KeyboardComponent key_resp_14
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Choice2
    CodeComponent choice2_text_code
      Code Type = Py
      Begin Routine:
        Choice2_txt = '          {} points\n\n{}% win      {}% lose\n\n  Accept         Decline  '.format(Value,Win,Lose)
    TextComponent choice2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $Choice2_txt
      units = norm
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    KeyboardComponent choice_2_key
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
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    CodeComponent choice2_code
      Code Type = Py
      End Routine:
        theseKeys = choice_2_key.keys

        if theseKeys == '1':
            LBracket = ""
            RBracket = ""
            if RealValue > 0:
                Gainsign = '+'
            else:
                Gainsign = ''
            Outcome = RealValue
            RespCheck = ""
            totalsum = totalsum + Outcome
        elif theseKeys == '2':
            LBracket = "("
            RBracket = ")"
            if RealValue > 0:
                Gainsign = '+'
            else:
                Gainsign = ''
            Outcome = RealValue
            RespCheck = ""
            totalsum = totalsum
        elif theseKeys == None:
            LBracket = ""
            RBracket = ""
            Gainsign = ""
            Outcome = 0
            RespCheck = "Please respond!!!"
            totalsum = totalsum

        thisExp.addData('LBracket', LBracket)
        thisExp.addData('RBracket', RBracket)
        thisExp.addData('Gainsign', Gainsign)
        thisExp.addData('RespCheck', RespCheck)
        thisExp.addData('Outcome', Outcome)
        thisExp.addData('totalsum', totalsum)
  Routine WhereToNow
    TextComponent wheretonow
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text [set every repeat]:
        Do you want to repeat the practice?

            (Please alert the experimenter)
    KeyboardComponent key_resp_15
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Complete
    TextComponent complete
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
                                    You have completed the practice!

        The experimenter can answer the remaining questions you might have.

                        Next, we are going to conduct the formal session.

                                                    Good luck!
    KeyboardComponent key_resp_16
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Instruction1
  Routine Instruction2
  Routine Instruction3
  Routine Instruction4
  Routine Instruction5
  Routine ExFeedback1
  Routine ExDisplay2
  Routine ExChoice2
  Routine ExFeedback2
  Routine Instruction6
  Routine Instruction7
  Routine LetUsGo
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BML_practice1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Win', 50), ('Lose', 50), ('Value', 10), ('RealValue', 10)]),
      OrderedDict([('Win', 17), ('Lose', 83), ('Value', 45), ('RealValue', 45)]),
      OrderedDict([('Win', 66), ('Lose', 34), ('Value', 4), ('RealValue', 4)]),
      OrderedDict([('Win', 85), ('Lose', 15), ('Value', 50), ('RealValue', -50)]),
      OrderedDict([('Win', 23), ('Lose', 77), ('Value', 15), ('RealValue', -15)])]
    Routine Choice
    Routine ITI1
    Routine Feedback
    Routine ITI2
  LoopTerminator trials
  Routine LetUsGo2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = BML_practice2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Win', 52), ('Lose', 48), ('Value', 14), ('RealValue', 14)]),
      OrderedDict([('Win', 17), ('Lose', 83), ('Value', 9), ('RealValue', -9)]),
      OrderedDict([('Win', 83), ('Lose', 17), ('Value', 101), ('RealValue', 101)]),
      OrderedDict([('Win', 15), ('Lose', 85), ('Value', 16), ('RealValue', -16)]),
      OrderedDict([('Win', 87), ('Lose', 13), ('Value', 34), ('RealValue', 34)])]
    Routine Choice2
    Routine ITI1
    Routine Feedback
    Routine ITI2
  LoopTerminator trials_2
  Routine WhereToNow
  Routine Complete
