PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001', 'starting_score': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1.000,-1.000,-1.000]
  expName = ADMT_r6
  keyboardBackend = ioHub
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Routines
  Routine Welcome
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    TextComponent welcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
        Welcome to the experiment!

        Today you will be playing a points-accumulation game.
        Your goal is to accumulate as many points as you can.

        (Press left button to continue)
    KeyboardComponent key_resp
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Review1
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    TextComponent review1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
        The display will tell you the number
        of points at stake and the likelihood of a win and a loss.

        If you accept, you may gain or you may
        lose the displayed amount of points.

        If you decline, you do not lose points,
        but cannot boost your score either.

        (Press right button to continue)
    KeyboardComponent key_resp_2
      allowedKeys = '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Review2
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    TextComponent review2
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 10
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      text:
        Remember：
        When the game starts, the display will show a cross in the center.
        Please maintain your attention on the cross.

        When an offer is displayed:
        If you accept, press the LEFT button,
        If you decline, press the RIGHT button.

        Generally, you have 3 s to decide.
        Watch out! When the points is 1000 or more,
        you will only have half the time to decide.
        Respond as fast as you can for each offer.

        After each offer, the outcome will be shown.

        Get ready!
        (press any key to start)
    KeyboardComponent key_resp_3
      allowedKeys = '1','2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ScannerPulse
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    TextComponent scannerpulse
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys = 'equal'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LongITI1
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    TextComponent longiti1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = +
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  Routine Choice
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    CodeComponent default_parameter
      Code Type = Py
      Begin Experiment:
        totalsum = int(expInfo['starting_score'])
    CodeComponent choice_txt_code
      Code Type = Py
      Begin Routine:
        Choice_txt = '     {} points\n\n{}% win      {}% lose\n\n  Accept         Decline  '.format(Value,Win,Lose)
    TextComponent choice
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ChoiceDur
      text [set every repeat] = $Choice_txt
      units = norm
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    KeyboardComponent choice_key
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ChoiceDur
      store = first key
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    CodeComponent choice_code
      Code Type = Py
      End Routine:
        theseKeys = choice_key.keys

        if theseKeys == '1':
            LBracket = ""
            RBracket = ""
            if RealValue > 0:
                Gainsign = '+'
            else:
                Gainsign = ''
            Outcome = RealValue
            RespCheck = ""
            totalsum = totalsum + Outcome
        elif theseKeys == '2':
            LBracket = "("
            RBracket = ")"
            if RealValue > 0:
                Gainsign = '+'
            else:
                Gainsign = ''
            Outcome = RealValue
            RespCheck = ""
            totalsum = totalsum
        elif theseKeys == None:
            LBracket = ""
            RBracket = ""
            Gainsign = ""
            Outcome = 0
            RespCheck = "Please respond!!!"
            totalsum = totalsum

        thisExp.addData('LBracket', LBracket)
        thisExp.addData('RBracket', RBracket)
        thisExp.addData('Gainsign', Gainsign)
        thisExp.addData('RespCheck', RespCheck)
        thisExp.addData('Outcome', Outcome)
        thisExp.addData('totalsum', totalsum)
  Routine ITI1
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    TextComponent iti1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITIDur1
      text = +
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  Routine Feedback
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    CodeComponent feedback_txt_code
      Code Type = Py
      Begin Routine:
        feedback_txt = '  {}{}{}{} points\n {}\n\n Total {} points'.format(LBracket,Gainsign,Outcome,RBracket,RespCheck,totalsum)
    TextComponent feedback
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_txt
      units = norm
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    CodeComponent feedback_code
      Code Type = Py
      End Routine:
        if choice_key.keys == '1':
            if RealValue > 0:
                cond = 'A_GAIN'
            elif RealValue < 0:
                cond = 'A_LOSS'
        elif choice_key.keys == '2':
            if RealValue > 0:
                cond = 'R_GAIN'
            elif RealValue < 0:
                cond = 'R_LOSS'
        elif choice_key.keys == None:
            cond = 'Dummy'

        thisExp.addData('cond', cond)
  Routine ITI2
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    TextComponent iti2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITIDur2
      text = +
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  Routine LongITI2
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    TextComponent longiti2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = +
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  Routine BreakWindow
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    CodeComponent final_score
      Code Type = Py
      Begin Routine:
        score = totalsum
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $'You are done with the first part! \nSo far you have collected {} points.\n\nWe will now take a short break.'.format(score)
      units = norm
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Flow
  Routine Welcome
  Routine Review1
  Routine Review2
  Routine ScannerPulse
  Routine LongITI1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BML_r6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Win': 45, 'Lose': 55, 'Value': 84, 'RealValue': 84, 'Label': 'ProbMM_valueH', 'ChoiceDur': 3, 'ITIDur1': 2, 'ITIDur2': 1},
      {'Win': 8, 'Lose': 92, 'Value': 16, 'RealValue': -16, 'Label': 'ProbLL_valueL', 'ChoiceDur': 3, 'ITIDur1': 2, 'ITIDur2': 1},
      {'Win': 20, 'Lose': 80, 'Value': 15, 'RealValue': -15, 'Label': 'ProbLL_valueL', 'ChoiceDur': 3, 'ITIDur1': 2, 'ITIDur2': 4},
      {'Win': 48, 'Lose': 52, 'Value': 16, 'RealValue': 16, 'Label': 'ProbMM_valueL', 'ChoiceDur': 3, 'ITIDur1': 2, 'ITIDur2': 1},
      {'Win': 56, 'Lose': 44, 'Value': 16, 'RealValue': -16, 'Label': 'ProbMM_valueL', 'ChoiceDur': 3, 'ITIDur1': 1, 'ITIDur2': 4},
      {'Win': 75, 'Lose': 25, 'Value': 4, 'RealValue': 4, 'Label': 'ProbHH_valueL', 'ChoiceDur': 3, 'ITIDur1': 1, 'ITIDur2': 1},
      {'Win': 42, 'Lose': 58, 'Value': 1424, 'RealValue': 1424, 'Label': 'ProbMM_valueSH', 'ChoiceDur': 1.5, 'ITIDur1': 5, 'ITIDur2': 4},
      {'Win': 52, 'Lose': 48, 'Value': 81, 'RealValue': -81, 'Label': 'ProbMM_valueH', 'ChoiceDur': 3, 'ITIDur1': 2, 'ITIDur2': 1},
      {'Win': 87, 'Lose': 13, 'Value': 97, 'RealValue': 97, 'Label': 'ProbHH_valueH', 'ChoiceDur': 3, 'ITIDur1': 3, 'ITIDur2': 3},
      {'Win': 41, 'Lose': 59, 'Value': 1375, 'RealValue': -1375, 'Label': 'ProbMM_valueSH', 'ChoiceDur': 1.5, 'ITIDur1': 1, 'ITIDur2': 1},
      {'Win': 93, 'Lose': 7, 'Value': 1, 'RealValue': 1, 'Label': 'ProbHH_valueL', 'ChoiceDur': 3, 'ITIDur1': 1, 'ITIDur2': 8},
      {'Win': 47, 'Lose': 53, 'Value': 5, 'RealValue': -5, 'Label': 'ProbMM_valueL', 'ChoiceDur': 3, 'ITIDur1': 3, 'ITIDur2': 3}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
    Routine Choice
    Routine ITI1
    Routine Feedback
    Routine ITI2
  LoopTerminator trials
  Routine LongITI2
  Routine BreakWindow
